CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:25
HasImagePlaneDetails:False

LoadImages:[module_num:1|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notes:['Load the images based on a common text pattern, e.g., the image file extension.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|.
    Check image sets for unmatched or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):26-16
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Color
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    Rescale intensities?:Yes

UnmixColors:[module_num:2|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
    Stain count:2
    Select the input color image:Color
    Name the output name:Hematoxylin
    Stain:Hematoxylin
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    Name the output name:DAB
    Stain:DAB
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
ColorToGray:[module_num:3|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notes:['Since the flourescence image is red-hued, pick out the red channel from the RGB color image to have the best contrast.']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
    Select the input image:Color
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Grayscale
    Convert green to gray?:No
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    Convert blue to gray?:No
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
ConserveMemory:[module_num:4|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notes:['Remove the color image from memory since it is no loner needed.']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
    Specify which images?:Images to remove
    Select image to remove:Color

EnhanceOrSuppressFeatures:[module_num:5|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notes:['Use a top hat filter to enhance the cell membrane. The filter size should be chosen to be approximately the width of the membrane (in pixels) or a bit larger.', 'Note that if the image resolution changes, the filter size will need to be modified accordingly.']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
    Select the input image:Grayscale
    Name the output image:Enhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the cell membrane. Remove the small false positives by setting the lower size limit; set the upper size limit arbitrarily high in order to capture everything. No declumping is necessary, so set to None.', '', 'Note that if the image resolution changes, the size limits will need to be modified accordingly.']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
    Select the input image:Enhanced
    Name the primary objects to be identified:Membrane
    Typical diameter of objects, in pixel units (Min,Max):20,13000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:7|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notes:['Convert the membrane objects to a binary (b&w) image.']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
    Select the input objects:Membrane
    Name the output image:Membrane
    Select the color format:Binary (black & white)
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
Morph:[module_num:8|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notes:['Shrink the membrane down to a skeleton (line segments that are 1 pixel wide), then try to remove short segments that are 5 pixels long (most likely not real sections of membrane), then expand a few pixels.This is an attempt to obtain a minimal membrane description.']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
    Select the input image:Membrane
    Name the output image:Skeleton
    Select the operation to perform:skel
    Number of times to repeat operation:Once
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    Scale:3
    Structuring element:Disk
    X offset:1
    Y offset:1
    Angle:0
    Width:3
    Height:3
    Custom:3,3,111111111
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    Select the operation to perform:spur
    Number of times to repeat operation:Custom
    Repetition number:5
    Scale:3
    Structuring element:Disk
    X offset:1
    Y offset:1
    Angle:0
    Width:3
    Height:3
    Custom:3,3,111111111
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    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Scale:5
    Structuring element:Disk
    X offset:1
    Y offset:1
    Angle:0
    Width:3
    Height:3
    Custom:3,3,111111111
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
ImageMath:[module_num:9|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notes:['Invert the image intensities to create a light foreground (adipocyte) against a dark background (membranes) in preparation for object detection.']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Inverted
    Image or measurement?:Image
    Select the first image:Enhanced
    Multiply the first image by:1
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    Image or measurement?:Image
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
MaskImage:[module_num:10|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notes:['Mask the inverted image with the skeleton image so that only the approximate adipocyte region is considered. The skeleton will impose dividing lines where the cell/cell separation is strongest; the identifcation module will further refine the declumping.']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
    Select the input image:Inverted
    Name the output image:Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:Skeleton
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:11|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notes:['Identify the adipocytes. Remove the small false positives by setting the lower size limit; set the upper size limit arbitrarily high in order to capture everything. Setting the declumping to Shape will preferentially split up neighboring roundish objects from each other; the hope is split regions even when the membrane is broken.', '', 'Note that if the image resolution changes, the size limits will need to be modified accordingly.']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
    Select the input image:Masked
    Name the primary objects to be identified:Adipocytes
    Typical diameter of objects, in pixel units (Min,Max):50,12000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:60
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:CellOutlines
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyObjectsManually:[module_num:12|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
    Select the input image:Color
    Name the objects to be identified:HPCs
    Retain outlines of the identified objects?:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['Measure the adipocyte morphology.']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
    Select objects to measure:Adipocytes
    Select objects to measure:Membrane
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:14|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notes:['Overlay the adipocyte outlines on the grayscale image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Grayscale
    Name the output image:OverlayAdipocytes
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:CellOutlines
    Select outline color:Red
    Load outlines from an image or objects?:Image
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Color
    Name the output image:HPCs
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:HPCs

DisplayDataOnImage:[module_num:16|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notes:['add display number on image']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
    Display object or image measurements?:Object
    Select the input objects:Membrane
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayAdipocytes
    Text color:red
    Name the output image that has the measurements displayed:NumberAdipocytes
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

SaveImages:[module_num:17|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notes:['Save the outline image as a PNG.']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
    Select the type of image to save:Image
    Select the image to save:NumberAdipocytes
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Color
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlines
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CalculateMath:[module_num:18|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notes:['Convert the area from pixels to microns by multiplying by the scaling factor: Replace the value in "Multiply the above operand by" with the appropriate number. Remember to square the factor since area is a squared measure.']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
    Name the output measurement:AreaInMicrons
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:Adipocytes
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:50
    Raise the power of above operand by:1
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    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RelateObjects:[module_num:19|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
    Select the input child objects:HPCs
    Select the input parent objects:HPCs
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:HPCs
    Select neighboring objects to measure:Adipocytes
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select a colormap:Default

MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:Adipocytes
    Select neighboring objects to measure:HPCs
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount2
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:22|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notes:['Export the measures to a spreadsheet.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:ObjectNeighborCount
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Color
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:neighbor
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:HPCs
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Color
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:ObjectNeighborCount2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Color
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Neighboradipocytes
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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