CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|/Users/labnym/Desktop/Cellprofiler/Input/imagenes
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):25-16
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:rawCD34
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    Rescale intensities?:Yes

UnmixColors:[module_num:2|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
    Stain count:2
    Select the input color image:rawCD34
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:DAB
    Stain:DAB
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.10,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:DAB
    Name the primary objects to be identified:CD34
    Typical diameter of objects, in pixel units (Min,Max):9,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:100
    Suppress local maxima that are closer than this minimum allowed distance:100
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.45,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyObjectsManually:[module_num:5|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
    Select the input image:rawCD34
    Name the objects to be identified:CD34Cells

ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/Users/labnym/Desktop/Cellprofiler/Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_Nuclei,Image|Count_CD34,CD34|Location_Center_Y,CD34|Location_Center_X,CD34|Location_Center_Z,CD34|Number_Object_Number,CD34Cells|Location_Center_Y,CD34Cells|Location_Center_X,CD34Cells|Number_Object_Number,Nuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CD34
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rawCD34
    Name the output image:CD34Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:CD34Cells

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CD34Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawCD34
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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