CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|/Users/labnym/Desktop/Cellprofiler/Input/imagenes
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):9-15
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:rawMPO
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    Rescale intensities?:Yes

UnmixColors:[module_num:2|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
    Stain count:2
    Select the input color image:rawMPO
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:DAB
    Stain:DAB
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:DAB
    Name the primary objects to be identified:MPO
    Typical diameter of objects, in pixel units (Min,Max):5,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.5,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:4|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
    Select objects to measure:MPO
    Calculate the Zernike features?:Yes

Threshold:[module_num:5|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
    Select the input image:Hematoxylin
    Name the output image:ThreshBlue
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Threshold:[module_num:6|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
    Select the input image:DAB
    Name the output image:Threshbrown
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureImageAreaOccupied:[module_num:7|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:ThreshBlue
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:MPO
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:MPO|Number_Object_Number,MPO|AreaShape_Perimeter,MPO|AreaShape_FormFactor,MPO|AreaShape_MeanRadius,MPO|AreaShape_Orientation,MPO|AreaShape_MajorAxisLength,MPO|AreaShape_MinFeretDiameter,MPO|AreaShape_MaxFeretDiameter,MPO|AreaShape_Zernike_1_1,MPO|AreaShape_Zernike_0_0,MPO|AreaShape_Zernike_3_1,MPO|AreaShape_Zernike_3_3,MPO|AreaShape_Zernike_2_0,MPO|AreaShape_Zernike_2_2,MPO|AreaShape_Zernike_5_1,MPO|AreaShape_Zernike_5_3,MPO|AreaShape_Zernike_5_5,MPO|AreaShape_Zernike_4_0,MPO|AreaShape_Zernike_4_2,MPO|AreaShape_Zernike_4_4,MPO|AreaShape_Zernike_7_1,MPO|AreaShape_Zernike_7_5,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MPO
    Overwrite existing files without warning?:No
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rawMPO
    Name the output image:MPOoverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:MPO

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:MPOoverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawMPO
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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