CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for unmatched or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):11-16
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Raw
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    Rescale intensities?:Yes

UnmixColors:[module_num:2|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
    Stain count:2
    Select the input color image:Raw
    Name the output image:Blue
    Stain:Hematoxylin
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    Name the output image:Red
    Stain:DAB
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:Red
    Name the primary objects to be identified:CD271
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.4,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:4|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
    Select objects to measure:CD271
    Calculate the Zernike features?:No

FilterObjects:[module_num:5|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
    Select the objects to filter:CD271
    Name the output objects:FilteredCD271
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:FilteredCD271
    Calculate the Zernike features?:No

Threshold:[module_num:7|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
    Select the input image:Blue
    Name the output image:ThreshBlue
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Threshold:[module_num:8|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
    Select the input image:Red
    Name the output image:ThreshRed
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:2.5
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureImageAreaOccupied:[module_num:9|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:ThreshBlue
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:FilteredCD271
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Raw
    Name the output image:CD271Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:FilteredCD271

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CD271Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_FilteredCD271,Image|Count_CD271,Image|AreaOccupied_AreaOccupied_ThreshBlue,Image|AreaOccupied_AreaOccupied_FilteredCD271,Image|AreaOccupied_TotalArea_ThreshBlue
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:FilteredCD271
    Combine these object measurements with those of the previous object?:No
    File name: DATA.csv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
